PsychoPy2experiment version="2022.1.1"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['sbj'], expName, expInfo['date'])
  Experiment info = {'sbj': '810199252', 'hndns': 'r', 'eye': 'r', 'sex': 'female', 'age': '19', 'edu': '3'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $[0,0,0]
  colorSpace = hsv
  expName = HW1
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = سلام
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  Routine InsR
    ImageComponent rightInst
      anchor = top-center
      image = Supplementary Material/KbRight.jpg
      ori = 90
      size = ( 1 ,0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent rightInstKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent rightInstText
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        دست راست خود را مانند شکل قرار دهید.
        O: خانم
        P: آقا
  Routine Intro
    TextComponent IntroText
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        در هر مرحله با توجه با کلید های گفته شده در توضیحات
        جنسیت تصویر نشان داده شده را از دید خودتان
        مشخص کنید
        دقت کنید که سرعت پاسخ دهی نیز در نتایج مهم خواهد بود
        برای رد کردن هر بخش توضیحات کلید space را بزنید
    KeyboardComponent IntroKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine right
    ImageComponent stimuliRight
      image [set every repeat] = $stim
      pos [set every repeat] = pos
      size [set every repeat] = size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent rightK
      allowedKeys = 'p','o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixPoint
    PolygonComponent polygon
      fillColor = 0.0902, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine break_2
  Routine InsL
    ImageComponent image
      anchor = top-center
      image = Supplementary Material/KbLeft.jpg
      ori = 90
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent leftInstKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent leftInstText
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        دست چپ خود را مانند شکل قرار دهید.
        Q: خانم
        W: آقا
  Routine left
    ImageComponent stimuliLeft
      image [set every repeat] = $stim
      pos [set every repeat] = pos
      size [set every repeat] = size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_resp
      allowedKeys = 'q','w'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine Intro
  Routine InsR
  LoopInitiator loopright0 loopType="TrialHandler"
    conditionsFile = bmps.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stim': '0.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '10.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '20.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '30.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '40.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '50.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '60.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '70.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '80.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '0.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '10.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '20.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '30.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '40.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '50.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '60.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '70.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '80.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '0.bmp', 'pos': (1.74605, 3.02), 'size': (7, 7), 'r': None},
      {'stim': '10.bmp', 'pos': (1.74605, 3.02), 'size': (7, 7), 'r': None},
      {'stim': '20.bmp', 'pos': (1.74605, 3.02), 'size': (7, 7), 'r': None},
      {'stim': '30.bmp', 'pos': (1.74605, 3.02), 'size': (7, 7), 'r': None}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
    Routine fixPoint
    Routine right
  LoopTerminator loopright0
  Routine InsL
  LoopInitiator loopleft0 loopType="TrialHandler"
    conditionsFile = bmps.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stim': '0.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '10.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '20.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '30.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '40.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '50.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '60.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '70.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '80.bmp', 'pos': (0, 0), 'size': (4.37, 4.37), 'r': None},
      {'stim': '0.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '10.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '20.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '30.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '40.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '50.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '60.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '70.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '80.bmp', 'pos': (3.4921, 0), 'size': (7, 7), 'r': None},
      {'stim': '0.bmp', 'pos': (1.74605, 3.02), 'size': (7, 7), 'r': None},
      {'stim': '10.bmp', 'pos': (1.74605, 3.02), 'size': (7, 7), 'r': None},
      {'stim': '20.bmp', 'pos': (1.74605, 3.02), 'size': (7, 7), 'r': None},
      {'stim': '30.bmp', 'pos': (1.74605, 3.02), 'size': (7, 7), 'r': None}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
    Routine fixPoint
    Routine left
  LoopTerminator loopleft0
  Routine InsR
  LoopInitiator loopRight loopType="TrialHandler"
    conditionsFile = bmps.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stim': '0.bmp'},
      {'stim': '10.bmp'},
      {'stim': '20.bmp'},
      {'stim': '30.bmp'},
      {'stim': '40.bmp'},
      {'stim': '50.bmp'},
      {'stim': '60.bmp'},
      {'stim': '70.bmp'},
      {'stim': '80.bmp'}]
    Routine fixPoint
    Routine right
  LoopTerminator loopRight
  Routine InsR
  LoopInitiator loopRight2 loopType="TrialHandler"
    conditionsFile = bmps.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stim': '0.bmp', 'pos': (1.3, 0)},
      {'stim': '10.bmp', 'pos': (1.3, 0)},
      {'stim': '20.bmp', 'pos': (1.3, 0)},
      {'stim': '30.bmp', 'pos': (1.3, 0)},
      {'stim': '40.bmp', 'pos': (1.3, 0)},
      {'stim': '50.bmp', 'pos': (1.3, 0)},
      {'stim': '60.bmp', 'pos': (1.3, 0)},
      {'stim': '70.bmp', 'pos': (1.3, 0)},
      {'stim': '80.bmp', 'pos': (1.3, 0)},
      {'stim': '0.bmp', 'pos': (0.9, 0.9)},
      {'stim': '10.bmp', 'pos': (0.9, 0.9)},
      {'stim': '20.bmp', 'pos': (0.9, 0.9)},
      {'stim': '30.bmp', 'pos': (0.9, 0.9)},
      {'stim': '40.bmp', 'pos': (0.9, 0.9)},
      {'stim': '50.bmp', 'pos': (0.9, 0.9)},
      {'stim': '60.bmp', 'pos': (0.9, 0.9)},
      {'stim': '70.bmp', 'pos': (0.9, 0.9)},
      {'stim': '80.bmp', 'pos': (0.9, 0.9)},
      {'stim': '0.bmp', 'pos': (0, 1.3)},
      {'stim': '10.bmp', 'pos': (0, 1.3)},
      {'stim': '20.bmp', 'pos': (0, 1.3)},
      {'stim': '30.bmp', 'pos': (0, 1.3)},
      {'stim': '40.bmp', 'pos': (0, 1.3)},
      {'stim': '50.bmp', 'pos': (0, 1.3)},
      {'stim': '60.bmp', 'pos': (0, 1.3)},
      {'stim': '70.bmp', 'pos': (0, 1.3)},
      {'stim': '80.bmp', 'pos': (0, 1.3)},
      {'stim': '0.bmp', 'pos': (-0.9, 0.9)},
      {'stim': '10.bmp', 'pos': (-0.9, 0.9)},
      {'stim': '20.bmp', 'pos': (-0.9, 0.9)},
      {'stim': '30.bmp', 'pos': (-0.9, 0.9)},
      {'stim': '40.bmp', 'pos': (-0.9, 0.9)},
      {'stim': '50.bmp', 'pos': (-0.9, 0.9)},
      {'stim': '60.bmp', 'pos': (-0.9, 0.9)},
      {'stim': '70.bmp', 'pos': (-0.9, 0.9)},
      {'stim': '80.bmp', 'pos': (-0.9, 0.9)},
      {'stim': '0.bmp', 'pos': (0, -1.3)},
      {'stim': '10.bmp', 'pos': (0, -1.3)},
      {'stim': '20.bmp', 'pos': (0, -1.3)},
      {'stim': '30.bmp', 'pos': (0, -1.3)},
      {'stim': '40.bmp', 'pos': (0, -1.3)}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
    Routine fixPoint
    Routine right
  LoopTerminator loopRight2
  Routine InsL
  LoopInitiator loopLeft loopType="TrialHandler"
    conditionsFile = bmps.xlsx
    loopType = random
    nReps = 2
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    conditions:
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    Routine fixPoint
    Routine left
  LoopTerminator loopLeft
  Routine InsR
  LoopInitiator loopRight3 loopType="TrialHandler"
    conditionsFile = bmps.xlsx
    loopType = random
    nReps = 2
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    conditions:
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    Routine fixPoint
    Routine right
  LoopTerminator loopRight3
  Routine InsL
  LoopInitiator loopLeft2 loopType="TrialHandler"
    conditionsFile = bmps.xlsx
    loopType = random
    nReps = 2
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    conditions:
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    Routine fixPoint
    Routine left
  LoopTerminator loopLeft2
  Routine InsL
  LoopInitiator loopLeft3 loopType="TrialHandler"
    conditionsFile = bmps.xlsx
    loopType = random
    nReps = 2
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    conditions:
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    Routine fixPoint
    Routine left
  LoopTerminator loopLeft3
